opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: Transformation Spread to 6 Well Plates
author: EI
description: Plating a 96 well transformation Recovery plate on 6-well plates 
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 10}
  Plate 1: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 8}
  Plate 2: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 9}
  Plate 3: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 4}
  Plate 4: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 5}
  Plate 5: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 6}
  Plate 6: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 1}
  Plate 7: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 2}
  Plate 8: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 3}
  Recovery Plate: {definitionId: custom_beta/4ti_0117/1, location: 11}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - LB: {serialize: true}
  - Culture: {serialize: true}
ingredLocations:
  Recovery Plate:
    Culture {volume: 100}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
savedStepForms:
- stepType: pause
  stepName: Plating 96 transformation samples onto 6 well plates
  pauseAction: untilResume
  pauseMessage: This protocol will plate 60ul of culture onto 6 well plates. Click resume when ready.
- stepType: pause
  stepName: Loading Deck Instructions
  stepDetails: Place 
  pauseAction: untilResume
  pauseMessage: Place a 300 ul tip rack on position 10
    Place a Greiner 384 well plate containing cultures on position 11
    Place plate 1 (6 well plate) on position 8
    Place plate 2 (6 well plate) on position 9
    Place plate 3 (6 well plate) on position 4
    Place plate 4 (6 well plate) on position 5
    Place plate 5 (6 well plate) on position 6
    Place plate 6 (6 well plate) on position 1
    Place plate 7 (6 well plate) on position 2
    Place plate 8 (6 well plate) on position 3
    Remove the lids
    Click resume when ready
- stepType: moveLiquid
  stepName: Cells to plate TF1
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Recovery Plate
  aspirate_wells: A1-C1, A2-C2
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  dispense_labware: Plate 1
  dispense_wells: A1, B1, A2, B2, A3, B3
  dispense_flowRate: 300
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 11.5
  dispense_airGap_checkbox: true
  dispense_airGap_volume: 20
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Cells to plate TF2
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Recovery Plate
  aspirate_wells: D1-F1, D2-F2
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  dispense_labware: Plate 2
  dispense_wells: A1, B1, A2, B2, A3, B3
  dispense_flowRate: 300
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_airGap_checkbox: true
  dispense_airGap_volume: 20
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Cells to plate TF3
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Recovery Plate
  aspirate_wells: G1, H1, G2, H2, A3, A4
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  dispense_labware: Plate 3
  dispense_wells: A1, B1, A2, B2, A3, B3
  dispense_flowRate: 300
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_airGap_checkbox: true
  dispense_airGap_volume: 20
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Cells to plate TF4
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Recovery Plate
  aspirate_wells: B3-D3, B4-D4
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  dispense_labware: Plate 4
  dispense_wells: A1, B1, A2, B2, A3, B3
  dispense_flowRate: 300
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_airGap_checkbox: true
  dispense_airGap_volume: 20
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Cells to plate TF5
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Recovery Plate
  aspirate_wells: E3-G3, E4-G4
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  dispense_labware: Plate 5
  dispense_wells: A1, B1, A2, B2, A3, B3
  dispense_flowRate: 300
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_airGap_checkbox: true
  dispense_airGap_volume: 20
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Cells to plate TF6
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Recovery Plate
  aspirate_wells: H3, H4, A5, B5, A6, B6
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  dispense_labware: Plate 6
  dispense_wells: A1, B1, A2, B2, A3, B3
  dispense_flowRate: 300
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_airGap_checkbox: true
  dispense_airGap_volume: 20
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Cells to plate TF7
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Recovery Plate
  aspirate_wells: C5-E5, C6-E6
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  dispense_labware: Plate 7
  dispense_wells: A1, B1, A2, B2, A3, B3
  dispense_flowRate: 300
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_airGap_checkbox: true
  dispense_airGap_volume: 20
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Cells to plate TF8
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Recovery Plate
  aspirate_wells: F5, G5, F6, G6
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  dispense_labware: Plate 8
  dispense_wells: A1, B1, A2, B2
  dispense_flowRate: 300
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_airGap_checkbox: true
  dispense_airGap_volume: 20
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/4ti_0117/1:
    brand: {brand: 4titude, brandId: [4ti-0117]}
    metadata: {displayName: 4ti-0117, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.8, yDimension: 85.5, zDimension: 14.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: 4ti_0117}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 11.83, totalLiquidVolume: 300, shape: circular, diameter: 8.5, x: 14.4, y: 74.25, z: 2.57}
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commands:
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- delay: {message: This protocol will plate 60ul of culture onto 6 well plates. Click resume when ready., waitForResume: true}
- delay: {message: Place a 300 ul tip rack on position 10
    Place a Greiner 384 well plate containing cultures on position 11
    Place plate 1 (6 well plate) on position 8
    Place plate 2 (6 well plate) on position 9
    Place plate 3 (6 well plate) on position 4
    Place plate 4 (6 well plate) on position 5
    Place plate 5 (6 well plate) on position 6
    Place plate 6 (6 well plate) on position 1
    Place plate 7 (6 well plate) on position 2
    Place plate 8 (6 well plate) on position 3
    Remove the lids
    Click resume when ready, waitForResume: true}
- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 100, labwareId: Recovery Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 46.43}
- dispense: {pipetteId: p300_single_gen2, volume: 100, labwareId: Plate 1, wellName: A1, wellLocation: {origin: bottom, offset: {z: 11.5}}, flowRate: 300}
- blowout: {pipetteId: p300_single_gen2, labwareId: Plate 1, wellName: A1, flowRate: 300, wellLocation: {origin: bottom, offset: {z: 17.4}}}
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